<?xml version="1.0" encoding="UTF-8"?><batch mzmine_version="3.9.0">
    <batchstep method="io.github.mzmine.modules.io.import_rawdata_all.AllSpectralDataImportModule" parameter_version="1">
        <parameter name="File names">
            <file>/Users/amartyn/Desktop/Repetition_analysis_HordeumRootEx_Apr26/raw_data/neg_230403_AnnaBatch4_448_RB4_1_16949.mzXML</file>
            <file>/Users/amartyn/Desktop/Repetition_analysis_HordeumRootEx_Apr26/raw_data/neg_230403_AnnaBatch4_449_RB5_1_16970.mzXML</file>
            <file>/Users/amartyn/Desktop/Repetition_analysis_HordeumRootEx_Apr26/raw_data/neg_230403_AnnaBatch4_450_RB6_1_16973.mzXML</file>
            <file>/Users/amartyn/Desktop/Repetition_analysis_HordeumRootEx_Apr26/raw_data/neg_230403_AnnaBatch4_451_RB7_1_16955.mzXML</file>
            <file>/Users/amartyn/Desktop/Repetition_analysis_HordeumRootEx_Apr26/raw_data/neg_230403_AnnaBatch4_452_RB8_1_16967.mzXML</file>
            <file>/Users/amartyn/Desktop/Repetition_analysis_HordeumRootEx_Apr26/raw_data/neg_230403_AnnaBatch4_453_RC1_1_16972.mzXML</file>
            <file>/Users/amartyn/Desktop/Repetition_analysis_HordeumRootEx_Apr26/raw_data/neg_230403_AnnaBatch4_454_RC2_1_16958.mzXML</file>
            <file>/Users/amartyn/Desktop/Repetition_analysis_HordeumRootEx_Apr26/raw_data/neg_230403_AnnaBatch4_455_RC3_1_16976.mzXML</file>
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        </parameter>
        <parameter name="Advanced import" selected="false">
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        </parameter>
        <parameter name="Spectral library files"/>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_massdetection.MassDetectionModule" parameter_version="1">
        <parameter name="Raw data files" type="BATCH_LAST_FILES"/>
        <parameter name="Scan filters" selected="true">
            <parameter name="Scan number"/>
            <parameter name="Base Filtering Integer"/>
            <parameter name="Retention time"/>
            <parameter name="Mobility"/>
            <parameter name="MS level filter" selected="MS1, level = 1">1</parameter>
            <parameter name="Scan definition"/>
            <parameter name="Polarity">Any</parameter>
            <parameter name="Spectrum type">ANY</parameter>
        </parameter>
        <parameter name="Scan types (IMS)">All scan types</parameter>
        <parameter name="Mass detector" selected_item="Centroid">
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            <module name="Centroid">
                <parameter name="Noise level">300.0</parameter>
                <parameter name="Detect isotope signals below noise level" selected="false">
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                </parameter>
            </module>
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        </parameter>
        <parameter name="Denormalize fragment scans (traps)">false</parameter>
        <parameter name="Output netCDF filename (optional)" selected="false"/>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_massdetection.MassDetectionModule" parameter_version="1">
        <parameter name="Raw data files" type="BATCH_LAST_FILES"/>
        <parameter name="Scan filters" selected="true">
            <parameter name="Scan number"/>
            <parameter name="Base Filtering Integer"/>
            <parameter name="Retention time"/>
            <parameter name="Mobility"/>
            <parameter name="MS level filter" selected="MS2, level = 2">1</parameter>
            <parameter name="Scan definition"/>
            <parameter name="Polarity">Any</parameter>
            <parameter name="Spectrum type">ANY</parameter>
        </parameter>
        <parameter name="Scan types (IMS)">All scan types</parameter>
        <parameter name="Mass detector" selected_item="Centroid">
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            <module name="Centroid">
                <parameter name="Noise level">0.0</parameter>
                <parameter name="Detect isotope signals below noise level" selected="false">
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                </parameter>
            </module>
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        </parameter>
        <parameter name="Denormalize fragment scans (traps)">false</parameter>
        <parameter name="Output netCDF filename (optional)" selected="false"/>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_masscalibration.MassCalibrationModule" parameter_version="1">
        <parameter name="Raw data files" type="BATCH_LAST_FILES"/>
        <parameter name="Intensity threshold">1000.0</parameter>
        <parameter name="Duplicate error filter">false</parameter>
        <parameter name="Reference library of ions">
            <currentchoice>Standard Calibrant Library (SCL)</currentchoice>
            <choice name="Standard Calibrant Library (SCL)">
                <value>
                    <parameter name="Standard Calibrant Library file">
                        <current_file>/Users/amartyn/Desktop/Repetition_analysis_HordeumRootEx_Apr26/NaAcetate_neg_SCL2_withion.xlsx</current_file>
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                    </parameter>
                    <parameter name="m/z tolerance">
                        <absolutetolerance>0.09</absolutetolerance>
                        <ppmtolerance>5.0</ppmtolerance>
                    </parameter>
                    <parameter name="Retention time tolerance" unit="MINUTES">0.05</parameter>
                </value>
            </choice>
            <choice name="Universal Calibrant Library (UCL)">
                <value>
                    <parameter name="Ionization mode">Negative mode merged</parameter>
                    <parameter name="m/z tolerance ">
                        <absolutetolerance>0.001</absolutetolerance>
                        <ppmtolerance>5.0</ppmtolerance>
                    </parameter>
                </value>
            </choice>
        </parameter>
        <parameter name="Overall mass bias estimation">
            <currentchoice>Percentile range of errors</currentchoice>
            <choice name="High-density range of errors">
                <value>
                    <parameter name="Primary high-density range of errors size">2.0</parameter>
                    <parameter name="Error range tolerance">0.4</parameter>
                </value>
            </choice>
            <choice name="Percentile range of errors">
                <value>
                    <parameter name="Percentile range">
                        <min>10.0</min>
                        <max>90.0</max>
                    </parameter>
                </value>
            </choice>
        </parameter>
        <parameter name="Mass calibration method">
            <currentchoice>OLS regression</currentchoice>
            <choice name="Arithmetic mean">
                <value/>
            </choice>
            <choice name="KNN regression">
                <value>
                    <parameter name="Nearest neighbors percentage">10.0</parameter>
                </value>
            </choice>
            <choice name="OLS regression">
                <value>
                    <parameter name="Polynomial degree">1</parameter>
                    <parameter name="Exponential feature">false</parameter>
                    <parameter name="Logarithmic feature">false</parameter>
                </value>
            </choice>
        </parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_adapchromatogrambuilder.ModularADAPChromatogramBuilderModule" parameter_version="1">
        <parameter name="Raw data files" type="BATCH_LAST_FILES"/>
        <parameter name="Scan filters" selected="true">
            <parameter name="Scan number"/>
            <parameter name="Base Filtering Integer"/>
            <parameter name="Retention time"/>
            <parameter name="Mobility"/>
            <parameter name="MS level filter" selected="MS1, level = 1">1</parameter>
            <parameter name="Scan definition"/>
            <parameter name="Polarity">Any</parameter>
            <parameter name="Spectrum type">ANY</parameter>
        </parameter>
        <parameter name="Minimum consecutive scans">4</parameter>
        <parameter name="Minimum intensity for consecutive scans">300.0</parameter>
        <parameter name="Minimum absolute height">900.0</parameter>
        <parameter name="m/z tolerance (scan-to-scan)">
            <absolutetolerance>0.005</absolutetolerance>
            <ppmtolerance>15.0</ppmtolerance>
        </parameter>
        <parameter name="Suffix">eics</parameter>
        <parameter name="Allow single scan chromatograms"/>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_smoothing.SmoothingModule" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Smoothing algorithm" selected_item="Savitzky Golay">
            <module name="Savitzky Golay">
                <parameter name="Retention time smoothing" selected="true">5</parameter>
                <parameter name="Mobility smoothing" selected="false">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</parameter>
            </module>
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        </parameter>
        <parameter name="Original feature list">REMOVE</parameter>
        <parameter name="Suffix">sm</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_chromatogramdeconvolution.minimumsearch.MinimumSearchFeatureResolverModule" parameter_version="2">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Suffix">resolved</parameter>
        <parameter name="Original feature list">REMOVE</parameter>
        <parameter name="MS/MS scan pairing" selected="true">
            <parameter name="MS1 to MS2 precursor tolerance (m/z)">
                <absolutetolerance>0.05</absolutetolerance>
                <ppmtolerance>15.0</ppmtolerance>
            </parameter>
            <parameter name="Retention time filter" selected="Use feature edges" unit="MINUTES">0.2</parameter>
            <parameter name="Minimum relative feature height" selected="true">0.25</parameter>
            <parameter name="Minimum required signals" selected="false">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</parameter>
            <parameter name="Limit by ion mobility edges">false</parameter>
            <parameter name="Merge MS/MS spectra (TIMS)">false</parameter>
            <parameter name="Minimum signal intensity (absolute, TIMS)" selected="false">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</parameter>
            <parameter name="Minimum signal intensity (relative, TIMS)" selected="true">0.01</parameter>
        </parameter>
        <parameter name="Dimension">Retention time</parameter>
        <parameter name="Chromatographic threshold">0.9</parameter>
        <parameter name="Minimum search range RT/Mobility (absolute)">0.05</parameter>
        <parameter name="Minimum relative height">0.0</parameter>
        <parameter name="Minimum absolute height">900.0</parameter>
        <parameter name="Min ratio of peak top/edge">2.0</parameter>
        <parameter name="Peak duration range (min/mobility)">
            <min>0.1</min>
            <max>2.0</max>
        </parameter>
        <parameter name="Minimum scans (data points)">3</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.filter_isotopegrouper.IsotopeGrouperModule" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Name suffix">deisotoped</parameter>
        <parameter name="m/z tolerance (intra-sample)">
            <absolutetolerance>0.005</absolutetolerance>
            <ppmtolerance>3.5</ppmtolerance>
        </parameter>
        <parameter name="Retention time tolerance" unit="MINUTES">0.05</parameter>
        <parameter name="Mobility tolerance" selected="false"/>
        <parameter name="Monotonic shape">true</parameter>
        <parameter name="Maximum charge">1</parameter>
        <parameter name="Representative isotope">Most intense</parameter>
        <parameter name="Never remove feature with MS2">true</parameter>
        <parameter name="Original feature list">REMOVE</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.filter_isotopefinder.IsotopeFinderModule" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Chemical elements">H,C,N,O,S</parameter>
        <parameter name="m/z tolerance (feature-to-scan)">
            <absolutetolerance>0.005</absolutetolerance>
            <ppmtolerance>5.0</ppmtolerance>
        </parameter>
        <parameter name="Maximum charge of isotope m/z">1</parameter>
        <parameter name="Search in scans">SINGLE MOST INTENSE</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.align_join.JoinAlignerModule" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Feature list name">Aligned feature list</parameter>
        <parameter name="m/z tolerance (sample-to-sample)">
            <absolutetolerance>0.005</absolutetolerance>
            <ppmtolerance>15.0</ppmtolerance>
        </parameter>
        <parameter name="Weight for m/z">3.0</parameter>
        <parameter name="Retention time tolerance" unit="MINUTES">0.1</parameter>
        <parameter name="Weight for RT">1.0</parameter>
        <parameter name="Mobility tolerance" selected="false"/>
        <parameter name="Mobility weight">1.0</parameter>
        <parameter name="Require same charge state">false</parameter>
        <parameter name="Require same ID">false</parameter>
        <parameter name="Compare isotope pattern" selected="false">
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        </parameter>
        <parameter name="Compare spectra similarity" selected="false">
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        </parameter>
        <parameter name="Original feature list">KEEP</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.filter_duplicatefilter.DuplicateFilterModule" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Name suffix">dup</parameter>
        <parameter name="Filter mode">NEW AVERAGE</parameter>
        <parameter name="m/z tolerance">
            <absolutetolerance>0.01</absolutetolerance>
            <ppmtolerance>5.0</ppmtolerance>
        </parameter>
        <parameter name="RT tolerance" unit="MINUTES">0.1</parameter>
        <parameter name="Mobility tolerance" selected="false">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</parameter>
        <parameter name="Require same identification">false</parameter>
        <parameter name="Original feature list">KEEP</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.filter_rowsfilter.RowsFilterModule" parameter_version="2">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Name suffix">filtered</parameter>
        <parameter name="Minimum aligned features (samples)" selected="true">
            <abs>2</abs>
            <rel>0.0</rel>
        </parameter>
        <parameter name="Minimum features in an isotope pattern" selected="false">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</parameter>
        <parameter name="Validate 13C isotope pattern" selected="false">
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        </parameter>
        <parameter name="Remove redundant isotope rows">false</parameter>
        <parameter name="m/z" selected="true">
            <min>0.0</min>
            <max>880.0</max>
        </parameter>
        <parameter name="Retention time" selected="true">
            <min>1.0</min>
            <max>20.0</max>
        </parameter>
        <parameter name="features duration range" selected="false">
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        </parameter>
        <parameter name="Chromatographic FWHM" selected="false">
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        </parameter>
        <parameter name="Charge" selected="false">
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        </parameter>
        <parameter name="Kendrick mass defect" selected="false">
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        </parameter>
        <parameter name="Parameter">No parameters defined</parameter>
        <parameter name="Only identified?">false</parameter>
        <parameter name="Text in identity" selected="false"/>
        <parameter name="Text in comment" selected="false"/>
        <parameter name="Keep or remove rows">Keep rows that match all criteria</parameter>
        <parameter name="Feature with MS2 scan">true</parameter>
        <parameter name="Never remove feature with MS2">false</parameter>
        <parameter name="Reset the feature number ID">true</parameter>
        <parameter name="Mass defect" selected="false"/>
        <parameter name="Original feature list">KEEP</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.io.export_features_sirius.SiriusExportModule" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Filename">
            <current_file>/Users/amartyn/Desktop/Repetition_analysis_HordeumRootEx_Apr26/HordeumCSSP_RootEx_Apr26_stdAUnew_project.mgf</current_file>
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        </parameter>
        <parameter name="Merge MS/MS" selected="false">
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        </parameter>
        <parameter name="m/z tolerance">
            <absolutetolerance>0.005</absolutetolerance>
            <ppmtolerance>10.0</ppmtolerance>
        </parameter>
        <parameter name="Only rows with annotation">false</parameter>
        <parameter name="Exclude multiple charge">false</parameter>
        <parameter name="Exclude multimers">false</parameter>
    </batchstep>
</batch>
